PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'group': "['A', 'B', 'C', 'D', 'E', 'F']"}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = hand-grasp-v2
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine StimDisplay
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if trials.thisN == 0:
            continueRoutine = True
        #    outlet.push_sample(["BreakBeg"])
        elif trials.thisN == 3:
            continueRoutine = True
        elif trials.thisN == 7:
            continueRoutine = True
        else:
            continueRoutine = False
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        lol
  Routine FistAction
    TextComponent FistActionScr
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
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      text [set every repeat]:
        $Action
    CodeComponent Left_Right
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["ActionBeg-" + condsFile[5:-4] + "-" + Hand + "-" + Action])
      Each Frame:
        rect_hand = visual.Rect(
            win,
            size=(0.3, 0.2),
            fillColor="white",
            units="norm"
        )
        FistActionScr.alignText = "center"
        if Hand == "Left":
            rect_hand.pos = (-0.5, 0)
            FistActionScr.pos = (-0.45, 0)
        elif Hand == "Right":
            rect_hand.pos = (0.5, 0)
            FistActionScr.pos = (0.45, 0)
        rect_hand.draw()
      End Experiment:
        outlet.push_sample(["ExptEnd"])
      End Routine:
        outlet.push_sample(["ActionEnd-" + condsFile[5:-4] + "-" + Hand + "-" + Action])
  Routine Position
    TextComponent PositionMsg
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $condMessage
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  Routine Fixation
    TextComponent FixScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent FixMarker
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["FixBeg-" + condsFile[5:-4] + "-" + Hand + "-" + Action])
      End Routine:
        outlet.push_sample(["FixEnd-" + condsFile[5:-4] + "-" + Hand + "-" + Action])
  Routine Welcome
    TextComponent WelcomeScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Welcome to the experiment.

        Read the instructions on the next screen carefully.

        You can choose to quit the study at any point during the experiment by informing the experimenter.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent LSLInit
      Code Type = Auto->JS
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      Before Experiment:
        from pylsl import StreamInfo, StreamOutlet

        info = StreamInfo('GraspMarkerStream', 'Markers', 1, 0, 'string', 'myuidw43536')

        # next make an outlet
        outlet = StreamOutlet(info)

        print("sending grasp markers...")

        outlet.push_sample(["ExptBeg"])
      Begin Experiment:
        counterbalance = 'palmPos' + str(expInfo['group']) + ".csv"
      End Experiment:
        outlet.push_sample(["ExptEnd"])
  Routine Instructions
    TextComponent InstructionsScr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Your task is to open and close your palms (as shown by the experimenter).

        You will begin by closing your palms. There are three blocks with three different positions of the arms. You will begin by closing your palms in the orientation as indicated.

        Remember to only move your palms when instructed and not any other part of your body.

        You will also get breaks in between, you may stretch in that time only.

        Press SPACE when you're ready!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine FreeFix
    TextComponent FreeFixScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["FreeFixBeg"])
      End Routine:
        outlet.push_sample(["FreeFixEnd"])
  Routine FreeFistAct
    TextComponent FreeFistActScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = GO
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        outlet.push_sample(["FreeHandBeg"])
      End Routine:
        outlet.push_sample(["FreeHandEnd"])
  Routine FreeHandInst
    TextComponent FreeHandInsst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        In this final task, you have to open and close your palms in any position (from 3 before) in any manner you wish.

        When you see the plus sign, decide what hand to open/close and the position.

        When you see GO, then you perform the action. Press SPACE to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Break
    TextComponent BreakScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Please take a 1 minute break (minimum).

        Press SPACE when you are ready to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 60
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  Routine Thank_you
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Thank you for participating in the experiment.

        The experiment will end now...
Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator positionBlock loopType="TrialHandler"
    conditionsFile = $counterbalance
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine Position
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine Fixation
      Routine FistAction
    LoopTerminator trials
    Routine Break
  LoopTerminator positionBlock
  Routine FreeHandInst
  LoopInitiator FreeHandTrials loopType="TrialHandler"
    loopType = random
    nReps = 40
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    Routine FreeFix
    Routine FreeFistAct
  LoopTerminator FreeHandTrials
  Routine Thank_you
