PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = hand-grasp
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent WelcomeScreen
      durationEstim = 0
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Welcome to the experiment.

        Read the instructions on the next screen carefully.

        You can choose to quit the study at any point during the experiment.

        Press SPACE to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ThankYou
    TextComponent ThankYouScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Thank you for participating in this experiment.

        Please contact the experimenter for further instructions.
  Routine Instructions
    TextComponent InstructionScreen
      durationEstim = 0
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        Your task is to open and close your palms (as shown by the experimenter).

        You will be asked to open and close your left palm and your right palm.

        You will also be asked to do it in different postures.

        Remember to only move your palms when instructed and not any other part of your body.

        You will also get breaks in between, you may stretch in that time only.

        There will be a few demo trials for you to get acquainted with the experiment.

        Press SPACE to continue!
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine EndPractise
    TextComponent EndPractiseScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = 0
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      text:
        That was the end of the practise trial.

        We will now begin the real trial.

        Take a small break and press SPACE when you are ready to continue!
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PractiseTrialBlank
    TextComponent PractiseTrialBlankScreen
      color = 0.0000, 0.0000, 0.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine RealTrial
    TextComponent RealTrialScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $Hand + '\t\t' + Movement
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  Routine RealTrialBlank
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine RealTrialBlank_2
  Routine PracticeFixation1
    TextComponent PracticeFixationScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine PractiseTrialPalmMo1
    TextComponent MovementInst
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $Hand + '\t\t' + Movement
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  Routine PracticeTrial
  Routine PracFix
    TextComponent PracFixScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Hand + '\t\t' + Posture + '\t\t' + Action
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  Routine PracTrial
    TextComponent PracTrialScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Fix
    TextComponent FixScr
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Hand + '\t\t' + Posture + '\t\t' + Action
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  Routine Trial
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine BlockIndicatorPrac
Flow
  Routine Welcome
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim/stim-trial.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Sno', 1), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Open')]),
      OrderedDict([('Sno', 2), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Open')]),
      OrderedDict([('Sno', 3), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Close')]),
      OrderedDict([('Sno', 4), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Close')]),
      OrderedDict([('Sno', 5), ('Posture', 'Palm Down'), ('Hand', 'Right'), ('Action', 'Open')]),
      OrderedDict([('Sno', 6), ('Posture', 'Palm Down'), ('Hand', 'Left'), ('Action', 'Open')]),
      OrderedDict([('Sno', 7), ('Posture', 'Palm Down'), ('Hand', 'Right'), ('Action', 'Close')]),
      OrderedDict([('Sno', 8), ('Posture', 'Palm Down'), ('Hand', 'Left'), ('Action', 'Close')]),
      OrderedDict([('Sno', 9), ('Posture', 'Palm In'), ('Hand', 'Right'), ('Action', 'Open')]),
      OrderedDict([('Sno', 10), ('Posture', 'Palm In'), ('Hand', 'Left'), ('Action', 'Open')]),
      OrderedDict([('Sno', 11), ('Posture', 'Palm In'), ('Hand', 'Right'), ('Action', 'Close')]),
      OrderedDict([('Sno', 12), ('Posture', 'Palm In'), ('Hand', 'Left'), ('Action', 'Close')])]
    Routine PracFix
    Routine PracTrial
  LoopTerminator trials
  Routine EndPractise
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = stim/stim.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Sno', 1), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Open')]),
      OrderedDict([('Sno', 2), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Open')]),
      OrderedDict([('Sno', 3), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Close')]),
      OrderedDict([('Sno', 4), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Close')]),
      OrderedDict([('Sno', 5), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Open')]),
      OrderedDict([('Sno', 6), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Close')]),
      OrderedDict([('Sno', 7), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Open')]),
      OrderedDict([('Sno', 8), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Close')]),
      OrderedDict([('Sno', 9), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Open')]),
      OrderedDict([('Sno', 10), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Close')]),
      OrderedDict([('Sno', 11), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Open')]),
      OrderedDict([('Sno', 12), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Close')]),
      OrderedDict([('Sno', 13), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Open')]),
      OrderedDict([('Sno', 14), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Open')]),
      OrderedDict([('Sno', 15), ('Posture', 'Palm Up'), ('Hand', 'Left'), ('Action', 'Close')]),
      OrderedDict([('Sno', 16), ('Posture', 'Palm Up'), ('Hand', 'Right'), ('Action', 'Close')])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
    Routine Fix
    Routine Trial
  LoopTerminator trials_2
  Routine ThankYou
